PsychoPy2experiment version="2026.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001', 'distance_cm': '', 'screen_diag_in': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = eye_tracking_template
  exportHTML = on Save
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine loading_trial
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    CodeComponent configuration_code
      Code Type = JS
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      Before JS Experiment:
        // ---- run without Pavlovia: use local copies of two files that Builder points at pavlovia.org ----
        (function () {
          if (/pavlovia\.org$/.test(window.location.hostname)) { return; }
          const localCopies = {
            'https://pavlovia.org/assets/default/default.png': 'default.png',
            'https://cdnjs.cloudflare.com/ajax/libs/seedrandom/3.0.1/seedrandom.min.js': 'vendor/seedrandom.min.js'
          };
          const proto = core.ServerManager.prototype;
          const original = proto.prepareResources;
          proto.prepareResources = function (resources, ...rest) {
            const fixed = (resources || []).map((r) =>
              (r && localCopies[r.path]) ? Object.assign({}, r, { path: localCopies[r.path] }) : r);
            return original.call(this, fixed, ...rest);
          };
        })();
      Begin JS Experiment:
        // Download the webgazer library and re-download seedrandom.js (since webgazer
        // overrides it with a version that conflicts with PsychoJS)
        psychoJS.serverManager.prepareResources([
          { name: 'webgazer.js', path: 'js/webgazer-2.0.1.tp.js' },
          { name: 'seedrandom.js', path: 'https://cdnjs.cloudflare.com/ajax/libs/seedrandom/3.0.1/seedrandom.min.js' }
        ]);
        // Initialize x and y arrays; we use these to calculate running averages of
        // current gaze position; the longer the window, the slower, but more fluent
        // the updates
        let averagingWindow = 10;
        window.xGazes = new Array(averagingWindow ).fill(0);
        window.yGazes = new Array(averagingWindow ).fill(0);
        // Timestamp for last time eyes exited validation box
        window.eyesExitedTimestamp= (new Date).getTime();
        // No. of ms to keep webcam thumbnail visible after eyes returned into validation box
        window.eyesReturnedDelay = 3
        // ---- gaze recording helpers (do not change) ----
        // gazeStart() begins collecting gaze points, gazeStop('column') saves them
        // into the data file as a JSON list of {x, y, t}: x, y in pixels of the browser
        // window, t in ms since gazeStart().
        window.gazeRecording = false;
        window.gazeBuffer = [];
        window.gazeT0 = 0;
        window.gazeStart = function () {
          window.gazeBuffer = [];
          window.gazeT0 = performance.now();
          window.gazeRecording = true;
        };
        window.gazeStop = function (columnName) {
          window.gazeRecording = false;
          psychoJS.experiment.addData(columnName || 'gaze_data', JSON.stringify(window.gazeBuffer));
          window.gazeBuffer = [];
        };
      Each JS Frame:
        // Continue once the webgazer global is available
        continueRoutine = !window.hasOwnProperty('webgazer');
    TextComponent loading_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Downloading additional resources.

        One moment please...
  Routine webcam_trial
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    TextComponent intro_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        demo_eye_tracking: starting webcam

        This experiment demonstrates eye tracking via the webgazer library.

        You should see your web-browser request access to your webcam. You might need to click on this text to make that happen. Please permit access, and wait a little while. Your webcam video should appear in the top-left of the screen.
    CodeComponent start_webgazer
      Code Type = JS
      Begin JS Routine:
        // Show webcam thumbnail and face feedback box, but not face overlay and gaze dot
        window.webgazer.params.showVideoPreview = true;
        window.webgazer.params.showFaceFeedbackBox = true;
        window.webgazer.params.showFaceOverlay = false;
        window.webgazer.params.showGazeDot = false
        // Start eye tracking
        window.webgazer
            // Called on each eye tracking update
            .setGazeListener(function(data, clock) {
              if (data !== null) {
                // Remove first element from gazes array, add current gaze at the end
                window.xGazes.shift();
                window.xGazes.push(data.x);
                window.yGazes.shift();
                window.yGazes.push(data.y);
                // keep the point if a trial is recording
                if (window.gazeRecording) {
                  window.gazeBuffer.push({x: Math.round(data.x), y: Math.round(data.y), t: Math.round(performance.now() - window.gazeT0)});
                }
               }
            })
            .begin();
            //.showPredictionPoints(true);
      Each JS Frame:
        // Finish routine once everything is ready
        continueRoutine =
          !window.webgazer.isReady() ||
          document.getElementById('webgazerFaceFeedbackBox') === null ||
          document.getElementById('webgazerVideoFeed') === null;
  Routine intro_calibatrion_trial
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    TextComponent calibration_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        demo_eye_tracking: calibration

        Now we'll calibrate the eye tracker. Please try to keep your head still and within the rectangle you see in your webcam video. When you do so, the rectangle turns green.

        In the next part of this experiment, the webcam video disappears. It will reappear when your head is too from the rectangle. If this happens, please move back into view. White squares appears at different locations on the screen. Please click each square with your mouse.

        Click anywhere to continue...
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine calibration_trial
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    PolygonComponent calibration_square
      fillColor = $[1,1,1]
      lineWidth = 0
      shape = rectangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_3
      clickable = calibration_square
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent calibration_code
      Code Type = JS
      Begin JS Routine:
        // Position calibration_square using width and height of window
        var canvas = psychoJS.window.size;
        var scaling = [
          canvas[0] <= canvas[1]? 1: canvas[0] / canvas[1],
          canvas[1] <= canvas[0]? 1: canvas[1] / canvas[0]
        ];
        var newPos = [
            calibration_x * scaling[0],
            calibration_y * scaling[1]
        ];
        console.log(newPos);
        calibration_square.setPos(newPos);
      Each JS Frame:
        // Hide webcam thumbnail if eyes are in validation box
        if (webgazer.checkEyesInValidationBox() === true) {
          // If last time that eyes were outside of validation box was longer than
          // window.eyesReturnedDelay ago, hide thumbnail
          if (
            document.getElementById('webgazerFaceFeedbackBox').style.display != 'none' &&
            (new Date).getTime() > window.eyesExitedTimestamp + window.eyesReturnedDelay
          ) {
            document.getElementById('webgazerFaceFeedbackBox').style.display = 'none';
            document.getElementById('webgazerVideoFeed').style.display = 'none';
          }
        } else {
            // Eyes outside of validation box; show thumbnail
            window.eyesExitedTimestamp = (new Date).getTime();
            document.getElementById('webgazerFaceFeedbackBox').style.display = 'block';
            document.getElementById('webgazerVideoFeed').style.display = 'block';
        }
  Routine stim_trial
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    ImageComponent stim_image
      image [set every repeat] = $stim_file
      size = (0.8, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    CodeComponent gaze_code
      Code Type = JS
      Begin JS Routine:
        // start recording gaze for this trial
        gazeStart();
        // fit the picture into a 0.8 x 0.8 box, keeping its proportions
        try {
          const _res = psychoJS.serverManager.getResource(stim_file);
          const _ar = (_res.naturalWidth || _res.width) / (_res.naturalHeight || _res.height);
          stim_image.size = _ar >= 1 ? [0.8, 0.8 / _ar] : [0.8 * _ar, 0.8];
        } catch (e) { console.warn('could not read image size', e); }
      End JS Routine:
        // save the gaze points of this trial into the column gaze_data
        gazeStop('gaze_data');
  Routine intro_validation_trial
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    TextComponent validation_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Accuracy check

        Now we check how accurate the eye tracker is. Nine dots will appear one after another. Look at the centre of each dot until it disappears. Please do not click and keep your head still.

        Click anywhere to start...
    MouseComponent mouse_4
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine validation_trial
    RoutineSettingsComponent validation_trial
      stopVal [duration (s)] = 2.5
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    PolygonComponent val_dot
      fillColor = $[1,1,1]
      lineWidth = 0
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    CodeComponent val_code
      Code Type = JS
      Begin JS Routine:
        // place the dot: val_x, val_y are fractions of the window (same scheme as the calibration points)
        var canvas = psychoJS.window.size;
        var scaling = [
          canvas[0] <= canvas[1] ? 1 : canvas[0] / canvas[1],
          canvas[1] <= canvas[0] ? 1 : canvas[1] / canvas[0]
        ];
        val_dot.setPos([val_x * scaling[0], val_y * scaling[1]]);
        // remember where the dot is on the screen (px of the browser window) and the screen/window sizes
        psychoJS.experiment.addData('val_target_px_x', Math.round(window.innerWidth / 2 + val_x * window.innerWidth));
        psychoJS.experiment.addData('val_target_px_y', Math.round(window.innerHeight / 2 - val_y * window.innerHeight));
        psychoJS.experiment.addData('win_inner_w', window.innerWidth);
        psychoJS.experiment.addData('win_inner_h', window.innerHeight);
        psychoJS.experiment.addData('screen_w', window.screen.width);
        psychoJS.experiment.addData('screen_h', window.screen.height);
        psychoJS.experiment.addData('pixel_ratio', window.devicePixelRatio);
        psychoJS.experiment.addData('user_agent', navigator.userAgent);
        gazeStart();
      End JS Routine:
        // save the gaze points of this dot into the column val_gaze
        gazeStop('val_gaze');
Flow
  Routine loading_trial
  Routine webcam_trial
  Routine intro_calibatrion_trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = calibration_trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('calibration_x', -0.44), ('calibration_y', -0.44)]),
      OrderedDict([('calibration_x', -0.44), ('calibration_y', -0.22)]),
      OrderedDict([('calibration_x', -0.44), ('calibration_y', 0.0)]),
      OrderedDict([('calibration_x', -0.44), ('calibration_y', 0.22)]),
      OrderedDict([('calibration_x', -0.44), ('calibration_y', 0.44)]),
      OrderedDict([('calibration_x', -0.22), ('calibration_y', -0.44)]),
      OrderedDict([('calibration_x', -0.22), ('calibration_y', -0.22)]),
      OrderedDict([('calibration_x', -0.22), ('calibration_y', 0.0)]),
      OrderedDict([('calibration_x', -0.22), ('calibration_y', 0.22)]),
      OrderedDict([('calibration_x', -0.22), ('calibration_y', 0.44)]),
      OrderedDict([('calibration_x', 0.0), ('calibration_y', -0.44)]),
      OrderedDict([('calibration_x', 0.0), ('calibration_y', -0.22)]),
      OrderedDict([('calibration_x', 0.0), ('calibration_y', 0.0)]),
      OrderedDict([('calibration_x', 0.0), ('calibration_y', 0.22)]),
      OrderedDict([('calibration_x', 0.0), ('calibration_y', 0.44)]),
      OrderedDict([('calibration_x', 0.22), ('calibration_y', -0.44)]),
      OrderedDict([('calibration_x', 0.22), ('calibration_y', -0.22)]),
      OrderedDict([('calibration_x', 0.22), ('calibration_y', 0.0)]),
      OrderedDict([('calibration_x', 0.22), ('calibration_y', 0.22)]),
      OrderedDict([('calibration_x', 0.22), ('calibration_y', 0.44)]),
      OrderedDict([('calibration_x', 0.44), ('calibration_y', -0.44)]),
      OrderedDict([('calibration_x', 0.44), ('calibration_y', -0.22)]),
      OrderedDict([('calibration_x', 0.44), ('calibration_y', 0.0)])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
    Routine calibration_trial
  LoopTerminator trials
  Routine intro_validation_trial
  LoopInitiator val_loop loopType="TrialHandler"
    conditionsFile = validation_trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('val_x', -0.3), ('val_y', -0.3)]),
      OrderedDict([('val_x', -0.3), ('val_y', 0)]),
      OrderedDict([('val_x', -0.3), ('val_y', 0.3)]),
      OrderedDict([('val_x', 0), ('val_y', -0.3)]),
      OrderedDict([('val_x', 0), ('val_y', 0)]),
      OrderedDict([('val_x', 0), ('val_y', 0.3)]),
      OrderedDict([('val_x', 0.3), ('val_y', -0.3)]),
      OrderedDict([('val_x', 0.3), ('val_y', 0)]),
      OrderedDict([('val_x', 0.3), ('val_y', 0.3)])]
    Routine validation_trial
  LoopTerminator val_loop
  LoopInitiator stim_loop loopType="TrialHandler"
    conditionsFile = stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stim_file', 'stim1.jpg'), ('stim_label', 'example A')]),
      OrderedDict([('stim_file', 'stim2.jpg'), ('stim_label', 'example B')])]
    Routine stim_trial
  LoopTerminator stim_loop
